# >>>> INPUT FILE FOR MC-GPU v1.3 >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
#
#   Simulation with the Duke male phantom, from the Virtual Family.
#   Voxels bounding box:  61x31x186 cm^3
#
#                  @file    MC-GPU_v1.3.in
#                  @author  Andreu Badal (Andreu.Badal-Soler{at}fda.hhs.gov)
#                  @date    2012/12/12
#

#[SECTION SIMULATION CONFIG v.2009-05-12]
1.0e8                           # TOTAL NUMBER OF HISTORIES, OR SIMULATION TIME IN SECONDS IF VALUE < 100000
1234567890                      # RANDOM SEED (ranecu PRNG)
0                               # GPU NUMBER TO USE WHEN MPI IS NOT USED, OR TO BE AVOIDED IN MPI RUNS
128                             # GPU THREADS PER CUDA BLOCK (multiple of 32)
100                             # SIMULATED HISTORIES PER GPU THREAD


#[SECTION SOURCE v.2011-07-12]
120kVp_4.3mmAl.spc              # X-RAY ENERGY SPECTRUM FILE
30.5 -50.0  129.25              # SOURCE POSITION: X Y Z [cm]
0.0  1.0  0.0                   # SOURCE DIRECTION COSINES: U V W
-28.0  58.0                     # POLAR AND AZIMUTHAL APERTURES FOR THE FAN BEAM [degrees] (input negative to automatically cover the whole detector)

#[SECTION IMAGE DETECTOR v.2009-12-02]
run_1_selected_angles/mc-gpu_image.dat                # OUTPUT IMAGE FILE NAME
150    300                      # NUMBER OF PIXELS IN THE IMAGE: Nx Nz
 75.0  150.0                    # IMAGE SIZE (width, height): Dx Dz [cm]
120.0                           # SOURCE-TO-DETECTOR DISTANCE (detector set in front of the source, perpendicular to the initial direction)

#[SECTION ANGLES OF PROJ v.2023-09-06]
NO                          # DEFINE ANGLES SPECIFICALLY? [YES/NO] (otherwise number of projections and angle between Projections is used)
0				# 1st ANGLE OF PROJECTION
90				# 2nd ANGLE OF PROJECTION
180				# 3nd ANGLE OF PROJECTION
270				# 4nd ANGLE OF PROJECTION

#[SECTION CT SCAN TRAJECTORY v.2011-10-25]
4				# NUMBER OF PROJECTIONS (beam must be perpendicular to Z axis, set to 1 for a single projection)
90.0                            # ANGLE BETWEEN PROJECTIONS [degrees] (360/num_projections for full CT)
-3590.99  3590.99               # ANGLES OF INTEREST (projections outside the input interval will be skipped)
60.0                            # SOURCE-TO-ROTATION AXIS DISTANCE (rotation radius, axis parallel to Z)
0.0                             # VERTICAL TRANSLATION BETWEEN PROJECTIONS (HELICAL SCAN)

#[SECTION DOSE DEPOSITION v.2012-12-12]
NO                             # TALLY MATERIAL DOSE? [YES/NO] (electrons not transported, x-ray energy locally deposited at interaction)
NO                             # TALLY 3D VOXEL DOSE? [YES/NO] (dose measured separately for each voxel)
mc-gpu_dose.dat                 # OUTPUT VOXEL DOSE FILE NAME
1 122                           # VOXEL DOSE ROI: X-index min max (first voxel has index 1)
1  62                           # VOXEL DOSE ROI: Y-index min max
1 372                           # VOXEL DOSE ROI: Z-index min max

#[SECTION VOXELIZED GEOMETRY FILE v.2009-11-30]
geometry.vox.gz         # VOXEL GEOMETRY FILE (penEasy 2008 format; .gz accepted)

#[SECTION MATERIAL FILE LIST v.2009-11-30]
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/air__5_125kev.mcgpu  # MATERIAL FILE 1
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/lung__5_125kev.mcgpu  # MATERIAL FILE 2
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/pmp__5_125kev.mcgpu  # MATERIAL FILE 3
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/ldpe__5_125kev.mcgpu  # MATERIAL FILE 4
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/adipose__5_125kev.mcgpu  # MATERIAL FILE 5
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/h2o__5_125kev.mcgpu  # MATERIAL FILE 6
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/soft_tissue__5_125kev.mcgpu  # MATERIAL FILE 7
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/glands_others__5_125kev.mcgpu  # MATERIAL FILE 8
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/polystyrene__5_125kev.mcgpu  # MATERIAL FILE 9
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/red_marrow__5_125kev.mcgpu  # MATERIAL FILE 10
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/stomach_intestines__5_125kev.mcgpu  # MATERIAL FILE 11
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/liver__5_125kev.mcgpu  # MATERIAL FILE 12
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/muscle_tissue__5_125kev.mcgpu  # MATERIAL FILE 13
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/blood__5_125kev.mcgpu  # MATERIAL FILE 14
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/cartilage__5_125kev.mcgpu  # MATERIAL FILE 15
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/bone_020__5_125kev.mcgpu  # MATERIAL FILE 16
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/acrylic__5_125kev.mcgpu  # MATERIAL FILE 17
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/bone_050__5_125kev.mcgpu  # MATERIAL FILE 18
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/delrin__5_125kev.mcgpu  # MATERIAL FILE 19
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/bone_100__5_125kev.mcgpu  # MATERIAL FILE 20
/home/crohling/amalthea/4d-cbct-mc/cbctmc/assets/material_files/teflon__5_125kev.mcgpu  # MATERIAL FILE 21


# >>>> END INPUT FILE >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
